PsychoPy2experiment version="2024.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.1.3
  Window size (pixels) = [1646, 1029]
  color = $[-0.1765, -0.1765, -0.1765]
  expName = Stroop程序
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    TextComponent trial_text1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent trial_text2
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      text [set every repeat] = $word
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    KeyboardComponent trial_key_resp
      allowedKeys [set every repeat] = 'd','j','f','k'
      correctAns = $answer
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine Instructions
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    TextComponent instructions_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        您好！欢迎参加本次实验，在实验中您会看到一个“+”注视点。
        提示您需要将注意力集中在屏幕中央。
        随后会出现一个颜色字，需要您判断字的颜色：
        如果字为红色，则按“D”键；如果字为黄色，则按“F”键；
        如果字为蓝色，则按“J”键；如果字为绿色，则按“K”键。
        您有3秒钟的时间进行按键反应，请快速准确地进行判断。
        完全理解后，请按空格键开始练习。
    KeyboardComponent instructions_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
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    TextComponent practice_text1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent practice_text2
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      text [set every repeat] = $word
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    KeyboardComponent practice_key_resp
      allowedKeys = 'd','f','j','k'
      correctAns = $answer
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine endings
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    TextComponent endings_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 感谢参与本次实验！
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  Routine feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        message=''
        message_color=''
        if practice_key_resp.corr:
            message='回答正确!'
            message_color='green'
        else:
            message='回答错误!'
            message_color='red'
    TextComponent feedback_text
      color [set every repeat] = $message_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message
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  Routine feedback1
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        message=''
        message_color=''
        if trial_key_resp.corr:
            message='回答正确!'
            message_color='green'
        else:
            message='回答错误!'
            message_color='red'
    TextComponent feedback_text1
      color [set every repeat] = $message_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message
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  Routine rest
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    TextComponent rest_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        恭喜完成练习阶段！
        按空格键开始正式实验。
    KeyboardComponent rest_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator practices loopType="TrialHandler"
    conditionsFile = Practice_conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'word': '红', 'color': 'yellow', 'answer': 'f'},
      {'word': '黄', 'color': 'red', 'answer': 'd'},
      {'word': '蓝', 'color': 'blue', 'answer': 'j'},
      {'word': '绿', 'color': 'green', 'answer': 'k'},
      {'word': '约', 'color': 'blue', 'answer': 'j'},
      {'word': '留', 'color': 'red', 'answer': 'd'},
      {'word': '缓', 'color': 'green', 'answer': 'k'}]
    Routine practice
    Routine feedback
  LoopTerminator practices
  Routine rest
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Stroop_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': '红', 'color': 'red', 'answer': 'd'},
      {'word': '红', 'color': 'yellow', 'answer': 'f'},
      {'word': '红', 'color': 'blue', 'answer': 'j'},
      {'word': '红', 'color': 'green', 'answer': 'k'},
      {'word': '黄', 'color': 'red', 'answer': 'd'},
      {'word': '黄', 'color': 'yellow', 'answer': 'f'},
      {'word': '黄', 'color': 'blue', 'answer': 'j'},
      {'word': '黄', 'color': 'green', 'answer': 'k'},
      {'word': '蓝', 'color': 'red', 'answer': 'd'},
      {'word': '蓝', 'color': 'yellow', 'answer': 'f'},
      {'word': '蓝', 'color': 'blue', 'answer': 'j'},
      {'word': '蓝', 'color': 'green', 'answer': 'k'},
      {'word': '绿', 'color': 'red', 'answer': 'd'},
      {'word': '绿', 'color': 'yellow', 'answer': 'f'},
      {'word': '绿', 'color': 'blue', 'answer': 'j'},
      {'word': '绿', 'color': 'green', 'answer': 'k'},
      {'word': '约', 'color': 'red', 'answer': 'd'},
      {'word': '约', 'color': 'yellow', 'answer': 'f'},
      {'word': '约', 'color': 'blue', 'answer': 'j'},
      {'word': '约', 'color': 'green', 'answer': 'k'},
      {'word': '留', 'color': 'red', 'answer': 'd'},
      {'word': '留', 'color': 'yellow', 'answer': 'f'},
      {'word': '留', 'color': 'blue', 'answer': 'j'},
      {'word': '留', 'color': 'green', 'answer': 'k'},
      {'word': '缓', 'color': 'red', 'answer': 'd'},
      {'word': '缓', 'color': 'yellow', 'answer': 'f'},
      {'word': '缓', 'color': 'blue', 'answer': 'j'},
      {'word': '缓', 'color': 'green', 'answer': 'k'}]
    Routine trial
    Routine feedback1
  LoopTerminator trials
  Routine endings
